<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>UdpReceive</osc:Name>
          <osc:Port>5006</osc:Port>
          <osc:RemoteHostName>localhost</osc:RemoteHostName>
          <osc:RemotePort>0</osc:RemotePort>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>UdpSend</osc:Name>
          <osc:Port>0</osc:Port>
          <osc:RemoteHostName>localhost</osc:RemoteHostName>
          <osc:RemotePort>5005</osc:RemotePort>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D2</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="wie:KeyDown">
            <wie:Filter>D1</wie:Filter>
            <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EMG command</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>2</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="osc:SendMessage">
        <osc:Connection>UdpSend</osc:Connection>
        <osc:Address>/mcoords</osc:Address>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Annotation">
          <Name>4</Name>
          <Text><![CDATA[]]></Text>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="osc:ReceiveMessage">
          <osc:Address>/mcoords</osc:Address>
          <osc:TypeTag>ii</osc:TypeTag>
          <osc:Connection>UdpReceive</osc:Connection>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Item1</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Item2</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:BehaviorSubject">
          <Name>EmgSignal</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="beh:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM3</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="beh:Parse">
        <harp:Register xsi:type="beh:AnalogData" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AnalogInput0</Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>potentiometer</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>potentiometer</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>JAK</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Slider Value</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Item1 &gt; Item2</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>EMG command</Name>
      </Expression>
      <Expression xsi:type="gui:SliderBuilder">
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:Minimum>0</gui:Minimum>
        <gui:Maximum>10</gui:Maximum>
        <gui:DecimalPlaces xsi:nil="true" />
        <gui:Value>1.9565217391304348</gui:Value>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Slider Value</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Slider Value</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>potentiometer</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>EMG command</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="gui:TableLayoutPanelBuilder">
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:ColumnCount>2</gui:ColumnCount>
        <gui:RowCount>2</gui:RowCount>
        <gui:ColumnStyles />
        <gui:RowStyles />
        <gui:CellSpans />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioCapture">
          <al:DeviceName>Microphone (High Definition Aud</al:DeviceName>
          <al:SampleRate>44100</al:SampleRate>
          <al:SampleFormat>Mono16</al:SampleFormat>
          <al:BufferLength>100</al:BufferLength>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FrequencyFilter">
          <dsp:SampleRate>44100</dsp:SampleRate>
          <dsp:Cutoff1>100</dsp:Cutoff1>
          <dsp:Cutoff2>500</dsp:Cutoff2>
          <dsp:KernelLength>60</dsp:KernelLength>
          <dsp:FilterType>HighPass</dsp:FilterType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Abs" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>JAK</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="10" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="10" Label="Source2" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source3" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="25" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="25" Label="Source2" />
      <Edge From="24" To="25" Label="Source3" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="38" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="38" Label="Source2" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="38" Label="Source3" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source4" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>